PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Resources = ['data\\bg.png', 'data\\SWAT.csv', 'data\\initial_qs.csv']
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  color = black
  expName = classification_task
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Routines
  Routine trial
    ImageComponent image
      image = data/bg.png
      size = (1.25, 0.9)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $para.DURATION_MAP[phase]
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    KeyboardComponent key_resp
      allowedKeys = 'a','l'
      correctAns = $para.VESSEL_MAP[vessel]
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $para.DURATION_MAP[phase]
      storeCorrect = True
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    TextComponent lookup_table_left
      color = green
      font = "Lucida Console"
      letterHeight = 0.025
      pos = (-0.71, 0.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $para.DURATION_MAP[phase]
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      text:
        <insert lookup text here>

        <Friend frequencies>

        <Foe frequencies>

        0123456789
    TextComponent lookup_table_right
      color = green
      font = "Lucida Console"
      letterHeight = 0.025
      pos = (0.7, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $para.DURATION_MAP[phase]
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      text:
        Any text

        including line breaks
    CodeComponent bands
      Code Type = JS
      Before JS Experiment:
        // Random util functions that don't fit elsewhere
        import * as jl from "./src/johnlib.js"
        // Generative functions (trials orders, line positions, etc)
        import * as gen from "./src/generate.js"
        // Band objects
        import * as band from "./src/band.js"
        // Inital parameters
        import * as para from "./src/para.js"
        // PIXI
        import * as PIXI from "../lib/pixi-legacy.min.js"
      Begin JS Experiment:
        // set text align
        lookup_table_left.setAlignHoriz('center');
        lookup_table_right.setAlignHoriz('center');

        window.PIXI = PIXI;
        window.psychoJS = psychoJS;
        // Check if we're using WebGL
        let webgl = psychoJS.window._renderer.type == PIXI.RENDERER_TYPE.WEBGL;
        psychoJS.experiment.addData('usingWebGL', webgl);
        psychoJS.experiment.nextEntry();

        bands = [
            new band.Band(
                psychoJS.window,
                [-0.01, 0.24], // pos
                [para.WIDTH, 0.2], // size
                para.VESSEL_SIGNATURES[0][0],
                jl.repeat(1, para.N_LINES),
                para.NTICKS_TOP,  para.BAND_RANGES[0],
            ),
            new band.Band(
                psychoJS.window,
                [-0.01, -0.17], // pos
                [para.WIDTH, 0.2], // size
                para.VESSEL_SIGNATURES[0][1],
                jl.repeat(1, para.N_LINES),
                para.NTICKS_BOTTOM,
                para.BAND_RANGES[1],
            )
        ];

        psychoJS.experiment.addData('practice_signatures_friend', para.PRACTICE_SIGNATURES[0]);
        psychoJS.experiment.addData('practice_signatures_foe', para.PRACTICE_SIGNATURES[1]);

        psychoJS.experiment.addData('signatures_friend', para.VESSEL_SIGNATURES[0]);
        psychoJS.experiment.addData('signatures_foe', para.VESSEL_SIGNATURES[1]);

        psychoJS.experiment.addData('band_ranges_top', para.BAND_RANGES[0]);
        psychoJS.experiment.addData('band_ranges_bottom', para.BAND_RANGES[1]);
      Begin JS Routine:
        image.setAutoDraw(true);

        bands[active_band].setLines(lines, is_signal);

        var lookup_left = para.LOOKUP_TEXT[0][active_band];
        var lookup_right = para.LOOKUP_TEXT[1][active_band];
        switch(phase) {
            case 0: // PRACTICE PHASE
                lookup_left = para.PRACTICE_LOOKUP_TEXT[0][active_band];
                lookup_right = para.PRACTICE_LOOKUP_TEXT[1][active_band];
                break;
            case 1: // BASELINE PHASE
                break;
            case 2: // TRAINING PHASE
                lookup_left = "Friend\n(Press A)";
                lookup_right = "Foe\n(Press L)";
                if (active_band == para.HIGHLIGHT) {
                    lookup_left = "Friend\n(Blue)\n(Press A)";
                    lookup_right = "Foe\n(Red)\n(Press L)";
                }
                bands[para.HIGHLIGHT].setHighlight(true, vessel);
                bands[para.LOWLIGHT].setLowlight(true);
                break;
            case 3: // TEST PHASE
                lookup_left = "Friend\n(Press A)";
                lookup_right = "Foe\n(Press L)";
                break;
        }

        // Set active band
        for(var i = 0; i < bands.length; i++) {
            let band = bands[i];
            band.active = active_band == i;
            band.rectangle.opacity = 1.0 - band.active;
            band.rectangle._needUpdate = true;
            band.setAutoDraw(true);
        }

        lookup_table_left.text = lookup_left;
        lookup_table_right.text = lookup_right;
      Each JS Frame:
        // Update uniforms
        for(var i = 0; i < bands.length; i++) {
            var band = bands[i];
            band.uniforms.frameN = frameN;
        }
      End JS Routine:
        image.setAutoDraw(false);
        for(var i = 0; i < bands.length; i++) {
            let band = bands[i];
            band.active = false;
            band.setAutoDraw(false);
        }
        if (key_resp.corr) {
            feedback_text.text = "Correct";
        } else {
            feedback_text.text = "Incorrect";
        }

        switch(phase) {
            case 0: // PRACTICE PHASE
                break;
            case 1: // BASELINE PHASE
                break;
            case 2: // TRAINING PHASE
                bands[para.HIGHLIGHT].setHighlight(false);
                bands[para.LOWLIGHT].setLowlight(false);
                break;
            case 3: // TEST PHASE
                feedback_text.text = ""; // No feedback on test
                break;
        }

        // For some reason it can't add array data automatically
        psychoJS.experiment.addData('lines_presented', lines);
        psychoJS.experiment.addData('is_signal_presented', is_signal);
  Routine feedback
    TextComponent feedback_text
      font = "Times New Roman"
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = good work!
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  Routine intro
    TextComponent text
      font = "Times New Roman"
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        In this experiement, you will be taking on the role of a SONAR operator. You will be classifying different ship types using SONAR signals which appear as vertical lines on a simulated display. This experiment will be testing different ways of supporting SONAR operators to make decisions.

        There will be four sections of the experiment, in which you will recieve different types of assistance to make classifications. Please try your best to classify the vessels. The experiment will likely take around 30 minutes in total to complete.

        Please press the 'space' key to continue to the tutorial.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine outro
    TextComponent outro_text
      font = "Times New Roman"
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Thank you very much for participating!
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    KeyboardComponent key_resp_5
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent completion
      Code Type = JS
      End JS Routine:
        psychoJS.experiment.addData('globalClockTime', globalClock.getTime());
        psychoJS.experiment.nextEntry();
  Routine instructions
    TextComponent instructions_text
      font = "Times New Roman"
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent phase_init_code
      Code Type = JS
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      Begin JS Routine:
        instructions_text.text = para.instructions[phase];
        debrief_text.text = para.debrief[phase];
  Routine debrief
    CodeComponent debrief_code
      Code Type = JS
      Begin JS Experiment:
        debrief_form = new visual.Form({
            win : psychoJS.window, name:'debrief_form',
            items : 'data/SWAT.csv',
            textHeight : 0.03,
            font : '"Times New Roman"',
            randomize : false,
            size : [0.8, 0.5],
            pos : [0, 0.05],
            //responseColor : 'black',
            itemPadding : 0.12,
            depth: 0.0,
            opacity: 0.0
        });
        // Fix the text colour 'cos GUI wont' do it
        //form.responseColor = 'black';
        // Make the broken scrollbar invisible
        debrief_form._scrollbar.size = [0,0];
        debrief_form._scrollbar.markerColor = 'black';
        debrief_form._scrollbar.lineColor = 'black';
        debrief_form._scrollbar.fillColor = 'black';

        // Functions for each response
        let time_load = function(side) {
            return `${side?'Almost never':'Often'} have spare time. Interruptions or overlap among activities are ${side?'frequent':'infrequent'}.`;
        }
        let mental_effort = function(side) {
            return `Very ${side?'intense':'little'} concentration required. Activity is ${side?'complex':'almost automatic'}, and requires ${side?'total':'little'} attention.`;
        }
        let stress_load = function(side) {
            return `Task causes ${side?'intense':'little'} stress due to confusion, frustration or anxiety.`;
        }
        let funcs = [time_load, mental_effort, stress_load];

        texts = [];

        for (var i = 0; i < 3; i++) {
            for (var j = 0; j < 2; j++) {
                var t = new visual.TextStim({
                    win: psychoJS.window,
                    name: 't',
                    text: funcs[i](j),
                    font: '"Times New Roman"',
                    units: undefined,
                    pos: [-0.35 + j*0.8, 0.18 - i * 0.19], height: 0.02,  wrapWidth: 0.3, ori: 0.0,
                    color: new util.Color('white'),  opacity: undefined,
                    depth: 3.0
                });
                texts.push(t);
            }
        }
      Begin JS Routine:
        button_2.fillColor = 'darkgrey';
        button_2.font = 'Times New Roman'

        button_callback_2 = function() {

            if (debrief_form.formComplete()) {
                continueRoutine = false;
            } else {
                continueRoutine = true;
            }
        }
        debrief_form.setAutoDraw(true);

        for(var i = 0; i < texts.length; i++) {
            let t = texts[i];
            t.setAutoDraw(true);
        }
      Each JS Frame:
        if (debrief_form.formComplete()) {
            button_2.fillColor = 'darkblue';
        } else {
            button_2.fillColor = 'darkgrey';
        }
      End JS Routine:
        debrief_form.addDataToExp(psychoJS.experiment, 'rows');

        for(var i = 0; i < texts.length; i++) {
            let t = texts[i];
            t.setAutoDraw(false);
        }

        debrief_form._scrollbar.setAutoDraw(false);
        for (let i = 0; i < debrief_form._items.length; ++i) {
            var ts = debrief_form._visual.textStims[i];
            if (ts) {
                ts.setAutoDraw(false);
            }
            var rs = debrief_form._visual.responseStims[i];
            if (rs) {
                rs.reset();
                rs.setAutoDraw(false);
            }
        }
        debrief_form.hide();
        debrief_form.setAutoDraw(false);
    TextComponent debrief_text
      font = "Times New Roman"
      letterHeight = 0.04
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
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      text:
        Great work! The phase is now complete.
        Please select along each scale below to indicate your assessment of where the task you just performed falls along the continuum between the two descriptions.
    ButtonComponent button_2
      bold = True
      callback = button_callback_2()
      font = "Times New Roman"
      forceEndRoutine = False
      letterHeight = 0.03
      pos = (0.5, -0.4)
      size = [0.35,0.1]
      startVal [time (s)] = 0
      text = Click here to continue
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  Routine explaination
    ImageComponent screenshot
      image = data\screenshot.png
      size = (1.0, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_6
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine tute
    KeyboardComponent tute_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    TextComponent tute_left
      color = green
      font = "Lucida Console"
      letterHeight = 0.025
      pos = (-0.71, 0.0)
      startVal [time (s)] = 0.0
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      text:
        Friend
        (Press A):
        2.50 Hz
        4.00 Hz
        6.50 Hz
        8.00 Hz
    TextComponent tute_right
      color = green
      font = "Lucida Console"
      letterHeight = 0.025
      pos = (0.7, 0)
      startVal [time (s)] = 0.0
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      text:
        Foe
        (Press L):
        3.20 Hz
        5.50 Hz
        7.80 Hz
        9.00 Hz
    CodeComponent code
      Code Type = JS
      Begin JS Experiment:
        // set text align
        tute_left.setAlignHoriz('center');
        tute_right.setAlignHoriz('center');

        tutebg = new util.Color([-.9,-.9,-.9]);

        tute_stage = 0;

        tute_config = [
        [`This is your SONAR display console. You will notice that there are two different frequency "bands". Each band represents a different frequency range in Hertz (Hz).

        (Press the 'space' key to continue)`, [0.0, -0.1], [0.8, 0.3]],

        [`On each trial, one of the bands will become active and display simulated SONAR signals. This time, the bottom band has been activated.

        (Press the 'space' key to continue)`, [0.0, 0.3], [0.8, 0.2]],

        [`You will initally need to use the lookup tables, found to the left and right of the console, to determine whether this signal is from a friend or a foe vessel. Can you classify the current vessel?

        (Press the 'space' key to continue)`, [-0.35, 0.3], [0.8, 0.2]],

        [`If you thought that this was a Friend vessel, you were correct! If you were wrong, pay attention to the frequencies listed on the left, and what frequencies are present in the lower band.

        (Press the 'space' key to continue)`, [-0.35, 0.3], [0.8, 0.2]],

        [`You will be given 10 seconds on each trial to classify a vessel. Respond using the A key for friend, or L key for foe. You'll be told if you were correct or not.
        Later on in the experiment, the lookup tables will be removed, and other types of assistance will be provided, but you'll learn more about that later.

        (Press the 'space' key to continue)`, [0.0, 0.1], [0.8, 0.3]],


        ]
      Begin JS Routine:
        image.setAutoDraw(true);


        textbox.fillColor = tutebg;
        textbox.text = tute_config[tute_stage][0];
        textbox.pos = tute_config[tute_stage][1];
        textbox.wrapWidth = tute_config[tute_stage][2][0] - 0.1;

        polygon.pos = tute_config[tute_stage][1];
        polygon.shape = tute_config[tute_stage][2];

        let tute_lines = [0.21,0.29,0.63,0.84];

        let range = para.BAND_RANGES[1];
        let tute_friend_text = "Friend\n(Press A):\n";
        for (var i = 0; i < tute_lines.length; i++) {
            let x = tute_lines[i];
            let val = (range[1] - range[0]) * x + range[0];
            tute_friend_text += val.toFixed(0) + " Hz\n";
        }
        tute_foe_text = "Foe\n(Press L):\n" +
        "324 Hz\n" +
        "552 Hz\n" +
        "787 Hz\n" +
        "902 Hz";

        bands[1].setLines(tute_lines, [1,1,1,1]);
        switch(tute_stage) {
            case 0:
                tute_left.text = "";
                tute_right.text = "";
                // Set active band
                for(var i = 0; i < bands.length; i++) {
                    let band = bands[i];
                    band.active = 0;
                    band.rectangle.opacity = 1.0 - band.active;
                    band.rectangle._needUpdate = true;
                    band.setAutoDraw(true);
                }
                break;
            case 1:
                bands[1].active = 1;
                bands[1].rectangle.opacity = 0.0;
                bands[1].rectangle._needUpdate = true;
                bands[1].xaxis.scalebar._needUpdate = true;
                bands[1].setAutoDraw(true);
                break;
            case 2:
                tute_left.text = tute_friend_text;
                tute_right.text = tute_foe_text;
                break;
            default:
                break;
        }
      Each JS Frame:
        // Update uniforms
        for(var i = 0; i < bands.length; i++) {
            var band = bands[i];
            band.uniforms.frameN = frameN;
        }
      End JS Routine:
        tute_stage++;

        if (tute_stage == tute_config.length) {
            image.setAutoDraw(false);
            for(var i = 0; i < bands.length; i++) {
                let band = bands[i];
                band.active = false;
                band.setAutoDraw(false);
            }
        }
    PolygonComponent polygon
      fillColor = $tutebg
      opacity = 0.7
      pos = (0, -0.1)
      shape = rectangle
      size = (0.8, 0.3)
      startVal [time (s)] = 0.5
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    TextComponent textbox
      font = "Times New Roman"
      letterHeight = 0.03
      pos = (0.0,-0.1)
      startVal [time (s)] = 0.5
      wrapWidth = 0.7
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      text:
        This is your SONAR display console. You will notice that there are two different "bands". Each band represents a different frequency range.

        (Press the 'space' key to continue)
  Routine init_qs
    CodeComponent start_form
      Code Type = JS
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      Begin JS Experiment:
        form = new visual.Form({
            win : psychoJS.window, name:'form',
            items : 'data/initial_qs.csv',
            textHeight : 0.03,
            font : '"Times New Roman"',
            randomize : false,
            size : [1, 0.7],
            pos : [0, 0],
            style : 'dark',
            //responseColor : 'black',
            itemPadding : 0.05
        });
        // Fix the text colour 'cos GUI wont' do it
        //form.responseColor = 'black';
        // Make the broken scrollbar invisible
        form._scrollbar.size = [0,0];
        form._scrollbar.markerColor = 'black';
        form._scrollbar.lineColor = 'black';
        form._scrollbar.fillColor = 'black';
        // THIS IS A NON-GENERIC HACK
        form._visual.responseStims[1].color = 'black';
        form._visual.responseStims[2].color = 'black';
      Begin JS Routine:
        button.fillColor = 'darkgrey';
        button.font = 'Times New Roman'

        button_callback = function() {

            if (form.formComplete()) {
                continueRoutine = false;
            } else {
                continueRoutine = true;
            }
        }

        form.setAutoDraw(true);
      Each JS Frame:
        if (form.formComplete()) {
            button.fillColor = 'darkblue';
        } else {
            button.fillColor = 'darkgrey';
        }
      End JS Routine:
        form.addDataToExp(psychoJS.experiment, 'rows');


        form._scrollbar.setAutoDraw(false);
        for (let i = 0; i < form._items.length; ++i) {

            var ts = form._visual.textStims[i];
            if (ts) {
                ts.setAutoDraw(false);
            }
            var rs = form._visual.responseStims[i];
            if (rs) {
                rs.setAutoDraw(false);
            }
        }
        form.hide();
        form.setAutoDraw(false);
    ButtonComponent button
      bold = True
      callback = button_callback()
      color = black
      font = "Times New Roman"
      forceEndRoutine = False
      letterHeight = 0.03
      pos = (0.5, -0.4)
      size = [0.35,0.1]
      startVal [time (s)] = 0
      text = Click here to continue
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    TextComponent welc_text
      font = "Times New Roman"
      letterHeight = 0.04
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Welcome! Please answer the questions below to get started.
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Flow
  Routine init_qs
  Routine intro
  LoopInitiator tutorial loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = tute_config.length
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    Routine tute
  LoopTerminator tutorial
  LoopInitiator phases loopType="TrialHandler"
    conditionsFile = $para.PHASES
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine instructions
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $para.RUN_ORDER[phase]
      loopType = sequential
      nReps = 1
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      Routine trial
      Routine feedback
    LoopTerminator trials
    Routine debrief
  LoopTerminator phases
  Routine outro
